PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1080, 720]
  color = $[-1,-1,-1]
  expName = 诱发
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        欢迎参加本实验
        请你现在用0-100分
        对自己吸烟的渴望打分
        完成后按空格键继续
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins
    TextComponent text_2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        接下来是联想任务
        依次呈现5张图
        每张图呈现30s
        请仔细观看每张图
        尽情展开联想
        按空格键继续
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pic1
    ImageComponent image
      image = 4.jpg
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine pic2
    ImageComponent image_2
      image = 12.JPG
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine pic3
    ImageComponent image_3
      image = 17.jpg
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine pic4
    ImageComponent image_4
      image = 19.jpg
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine pic5
    ImageComponent image_5
      image = 114.jpg
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine over
    TextComponent text_3
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        请你现在再次用0-100分
        对自己吸烟的渴望打分
        完成后按空格键完毕
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine ins
  Routine pic1
  Routine pic2
  Routine pic3
  Routine pic4
  Routine pic5
  Routine over
