PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1080, 720]
  color = $[-1,-1,-1]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        这是一个选择游戏
        名字叫“S的选择”
        你需要连续进行两次选择
        第一次选择的对象为S，第二次选择的对象为AB

        按空格键观看游戏视频
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine movie
    MovieComponent movie_2
      backend = moviepy
      forceEndRoutine = False
      movie = petal_20220503_192300.mp4
      size = (1800, 1300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12.0
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  Routine ins
    TextComponent text_2
      letterHeight = 0.05
      pos = (-0.05, 0)
      startVal [time (s)] = 0.0
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      text:
        游戏的规则是：
        按下黑色S大概率会跳到黑色AB，
        小概率跳到红色AB

        同样，

        按下红色S大概率会跳转到红色AB，
        小概率跳到黑色AB

        按空格键继续
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins1
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        游戏之所以叫“S的选择”是因为：
        你需要进行选择的是S，
        A或B可以随意选择.

        那么S应该如何选择呢？
        按空格键继续讲解
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins2
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        首先进入奖励情况
        你需要争取”有奖“，避免”没奖“
        按空格键继续
  Routine pro1
    ImageComponent image
      image = 图片1.png
      size = (1.3, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pro2
    ImageComponent image_2
      image = 图片2.png
      size = (1.3, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins3
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        接下来进入惩罚情况
        你需要争取”无惩罚“，避免”惩罚“
        按空格键继续
    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pro3
    ImageComponent image_3
      image = 图片4.png
      size = (1.3, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pro4
    ImageComponent image_4
      image = 图片3.png
      size = (1.3, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_9
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_6
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        游戏指导结束
        按空格键退出
    KeyboardComponent key_resp_10
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine movie
  Routine ins
  Routine ins1
  Routine ins2
  Routine pro1
  Routine pro2
  Routine ins3
  Routine pro3
  Routine pro4
  Routine end
